PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1512, 982]
  expName = Tester
  exportHTML = manually
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent One_ulnar
      image = 1_ulnar.jpg
      pos = (-.08, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent One
      image = 1.jpg
      pos = (-.08, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent three
      image = 3.jpg
      pos = (-.23, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent four
      image = 4.jpg
      pos = (-.23, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent five
      image = 5.jpg
      pos = (-.08, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent eight
      image = 8.jpg
      pos = (.07, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent ten
      image = 10.jpg
      pos = (-.23, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent a
      image = A.jpg
      pos = (.22, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent add_3
      image = H_U_radial.jpg
      pos = (-.38, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent add_5
      image = Adducted_5.jpg
      pos = (-.23, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent add_bent_5
      image = Adducted_5_bent.jpg
      pos = (.07, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent b
      image = B.jpg
      pos = (-.23, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent bent_3
      image = 3_curved.jpg
      pos = (-.23, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent bent_l
      image = L_curved.jpg
      pos = (.07, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent bent_v
      image = V_curved.jpg
      pos = (-.08, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent touch_x
      image = X_touch.jpg
      pos = (-.38, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent c
      image = C.jpg
      pos = (-.38, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent curved_5
      image = 5_curved.jpg
      pos = (.22, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent d
      image = D.jpg
      pos = (.07, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent e
      image = E.jpg
      pos = (.37, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent f
      image = F.jpg
      pos = (.07, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent flat_o
      image = Flat_O.jpg
      pos = (-.38, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent g
      image = G.jpg
      pos = (-.08, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent i
      image = i.jpg
      pos = (-.38, .22)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent k
      image = K.jpg
      pos = (.22, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent l_ulnar
      image = L_ulnar.jpg
      pos = (.37, .07)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent l
      image = L.jpg
      pos = (-.38, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent o
      image = O.jpg
      pos = (.22, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent open_8
      image = 8_radial.jpg
      pos = (.22, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent r
      image = R.jpg
      pos = (-.08, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent s
      image = S.jpg
      pos = (.07, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent u_h
      image = H_U.jpg
      pos = (.37, -.23)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent v
      image = V.jpg
      pos = (.37,-.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent w
      image = W.jpg
      pos = (.37, -.08)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent x_
      image = X.jpg
      pos = (.37, .37)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    ImageComponent y_
      image = Y.jpg
      pos = (.22, -.38)
      size = (.15, .15)
      startVal [time (s)] = 6.6
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    MouseComponent mouse_2
      clickable = One_ulnar, One, three, four, five, eight, ten, a, add_3, add_5, add_bent_5, b, bent_3, bent_l, bent_v, touch_x, c, curved_5, d, e, f, flat_o, g, i, k, l_ulnar, l, o, open_8, r, s, u_h, v, w, x_, y_
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    MovieComponent Black_Screen
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = My Movie.mp4
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    MovieComponent Noisy_1
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = Noisy_Black_Screen_90.mp4
      size = (2.0, 2.0)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = .5
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    MovieComponent HS_vids
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $HS_VIDS
      size = (1.0, 1.0)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
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    MovieComponent Noisy_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = Noisy_Black_Screen_90.mp4
      size = (2.0, 2.0)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
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    TextComponent ExitText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating, please wait while we save your results... 
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        //Dsiable downloading results to browser
        psychoJS._saveResults = 0;

        //Save data to filename
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        //Extract data from experiment
        let dataObj = psychoJS._experiment._trialsData;

        //Convert data to csv
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        //Send data tp OSF via datapipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID:'XEHBnacidEKS'
            }),
        }).then(response => response.json()).then(data => {
            // log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  LoopInitiator Trial_1 loopType="TrialHandler"
    conditionsFile = Research/Excel books/Part_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'HS_VIDS': '90_1_Elbow_Circle_Down24.mp4'},
      {'HS_VIDS': '90_Adducted_5_Mouth_Twist_Down12.mp4'},
      {'HS_VIDS': '90_4_Elbow_Circle_Forward22.mp4'},
      {'HS_VIDS': '90_Curved_V_Elbow_Twist_Down23.mp4'},
      {'HS_VIDS': '90_5_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_E_Neutral_Circle_Self5.mp4'},
      {'HS_VIDS': '90_1_Mouth_Twist_Self11.mp4'},
      {'HS_VIDS': '90_Y_Mouth_Lateral_Down20.mp4'},
      {'HS_VIDS': '90_Curved_5_Mouth_Lateral_Down18.mp4'},
      {'HS_VIDS': '90_Y_Mouth_Lateral_Self19.mp4'},
      {'HS_VIDS': '90_Curved_V_Neutral_Circle_Self5.mp4'},
      {'HS_VIDS': '90_I_Elbow_Lateral_Self29.mp4'},
      {'HS_VIDS': '90_O_Mouth_Lateral_Down20.mp4'},
      {'HS_VIDS': '90_W_Mouth_Lateral_Forward17.mp4'},
      {'HS_VIDS': '90_Adducted_Bent_5_Neutral_Twist_Down4.mp4'},
      {'HS_VIDS': '90_Curved_3_Mouth_Circle_Self14.mp4'},
      {'HS_VIDS': '90_R_Neutral_Circle_Down8.mp4'},
      {'HS_VIDS': '90_O_Elbow_Twist_Forward21.mp4'},
      {'HS_VIDS': '90_R_Elbow_Twist_Forward22.mp4'},
      {'HS_VIDS': '90_5_Elbow_Lateral_Down27.mp4'},
      {'HS_VIDS': '90_W_Mouth_Twist_Self12.mp4'},
      {'HS_VIDS': '90_B_Neutral_Circle_Forward4.mp4'},
      {'HS_VIDS': '90_Curved_3_Mouth_Lateral_Down19.mp4'},
      {'HS_VIDS': '90_3_Elbow_Twist_Self20.mp4'},
      {'HS_VIDS': '90_10_Mouth_Lateral_Down20.mp4'},
      {'HS_VIDS': '90_Curved_3_Mouth_Lateral_Forward17.mp4'},
      {'HS_VIDS': '90_Curved_5_Elbow_Twist_Self20.mp4'},
      {'HS_VIDS': '90_U_Mouth_Lateral_Down20.mp4'},
      {'HS_VIDS': '90_F_Mouth_Lateral_Self18.mp4'},
      {'HS_VIDS': '90_1_Ulnar_Mouth_Lateral_Forward16.mp4'},
      {'HS_VIDS': '90_Curved_V_Neutral_Twist_Forward1.mp4'},
      {'HS_VIDS': '90_8_Neutral_Circle_Down7.mp4'}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
    Routine trial
  LoopTerminator Trial_1
  Routine Goodbye
